<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:eph="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="eph:Rhd2000EvalBoard">
          <eph:BitFileName>C:\Program Files\Open Ephys\shared\rhd2000_usb3.bit</eph:BitFileName>
          <eph:SampleRate>SampleRate30000Hz</eph:SampleRate>
          <eph:ExternalFastSettleEnabled>false</eph:ExternalFastSettleEnabled>
          <eph:LowerBandwidth>0.1</eph:LowerBandwidth>
          <eph:UpperBandwidth>7500</eph:UpperBandwidth>
          <eph:DspCutoffFrequency>1</eph:DspCutoffFrequency>
          <eph:DspEnabled>true</eph:DspEnabled>
          <eph:CableDelayA xsi:nil="true" />
          <eph:CableDelayB xsi:nil="true" />
          <eph:CableDelayC xsi:nil="true" />
          <eph:CableDelayD xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\Manip7\Desktop\matrix.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="eph:AdcScale">
          <eph:AdcType>Electrode</eph:AdcType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>1</dsp:int>
            <dsp:int>2</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>30000</dsp:SampleRate>
          <dsp:Cutoff1>300</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:KernelLength>60</dsp:KernelLength>
          <dsp:FilterType>HighPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:DetectSpikes">
          <dsp:Delay>20</dsp:Delay>
          <dsp:Length>60</dsp:Length>
          <dsp:Threshold>
            <dsp:double>-100</dsp:double>
          </dsp:Threshold>
          <dsp:WaveformRefinement>AlignPeaks</dsp:WaveformRefinement>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BufferCapacity</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\Manip7\Desktop\matrix2.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="7" Label="Source1" />
      <Edge From="0" To="8" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>