<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:DigitalInput">
          <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Buttons</Selector>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="HasFlag">
              <Operand xsi:type="WorkflowProperty" TypeArguments="onix1:BreakoutButtonState">
                <Value>Square</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:Rhs2116StimulusTrigger">
          <onix1:DeviceName>HeadstageRhs2116/StimulusTrigger</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:Rhs2116PairData">
          <onix1:DeviceName>HeadstageRhs2116/Rhs2116Pair</onix1:DeviceName>
          <onix1:BufferSize>30</onix1:BufferSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="clockBN" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>LFP_clock_.raw</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>rhs2116pair-clock_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <continuous>true</continuous>
        <stopTrig>F</stopTrig>
        <switchName xsi:nil="true" />
        <delayStart>PT0S</delayStart>
        <interTrialDuration>PT10S</interTrialDuration>
        <shouldRepeat>false</shouldRepeat>
        <startTrig>D</startTrig>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:Rhs2116PairData">
          <onix1:DeviceName>HeadstageRhs2116/Rhs2116Pair</onix1:DeviceName>
          <onix1:BufferSize>30</onix1:BufferSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>LFP</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="dataBN" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>LFP_LFPdata_.raw</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>rhs2116pair-ac_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <continuous>true</continuous>
        <stopTrig>F</stopTrig>
        <switchName xsi:nil="true" />
        <delayStart>PT0S</delayStart>
        <interTrialDuration>PT10S</interTrialDuration>
        <shouldRepeat>false</shouldRepeat>
        <startTrig>D</startTrig>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:Rhs2116PairData">
          <onix1:DeviceName>HeadstageRhs2116/Rhs2116Pair</onix1:DeviceName>
          <onix1:BufferSize>30</onix1:BufferSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>RecoveryMask</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="recovryMaskBN" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>LFP_recovryMask_.raw</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>rhs2116pair-recovery_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <continuous>true</continuous>
        <stopTrig>F</stopTrig>
        <switchName xsi:nil="true" />
        <delayStart>PT0S</delayStart>
        <interTrialDuration>PT10S</interTrialDuration>
        <shouldRepeat>false</shouldRepeat>
        <startTrig>D</startTrig>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:Rhs2116PairData">
          <onix1:DeviceName>HeadstageRhs2116/Rhs2116Pair</onix1:DeviceName>
          <onix1:BufferSize>30</onix1:BufferSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>DCData</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="DCDataBN" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>LFP_DCdata_.raw</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>rhs2116pair-dc_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <continuous>true</continuous>
        <stopTrig>F</stopTrig>
        <switchName xsi:nil="true" />
        <delayStart>PT0S</delayStart>
        <interTrialDuration>PT10S</interTrialDuration>
        <shouldRepeat>false</shouldRepeat>
        <startTrig>D</startTrig>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HeadstageLFP</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="startTimeBN" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>LFP_startTime_.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>../../../Documents/data\Tests\raw_data\condition\_2025-10-20_16-56-20/NP_startTime_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp,Value</io:Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <continuous>true</continuous>
        <stopTrig>F</stopTrig>
        <switchName xsi:nil="true" />
        <delayStart>PT0S</delayStart>
        <interTrialDuration>PT10S</interTrialDuration>
        <shouldRepeat>false</shouldRepeat>
        <startTrig>D</startTrig>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:PortStatus">
          <onix1:DeviceName>HeadstageRhs2116/LinkController</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="portStatus" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>port-status_.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp,Value.Clock,Value.StatusCode</io:Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <continuous>true</continuous>
        <stopTrig>F</stopTrig>
        <switchName xsi:nil="true" />
        <delayStart>PT0S</delayStart>
        <interTrialDuration>PT10S</interTrialDuration>
        <shouldRepeat>false</shouldRepeat>
        <startTrig>D</startTrig>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:Rhs2116TriggerData">
          <onix1:DeviceName>HeadstageRhs2116/StimulusTrigger</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="TriggerBN" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>rhs2116trigger_.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Clock,Delay,Status,Origin</io:Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <delayEnd>PT0S</delayEnd>
        <trialDuration>PT10S</trialDuration>
        <continuous>true</continuous>
        <stopTrig>F</stopTrig>
        <switchName xsi:nil="true" />
        <delayStart>PT0S</delayStart>
        <interTrialDuration>PT10S</interTrialDuration>
        <shouldRepeat>false</shouldRepeat>
        <startTrig>D</startTrig>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="13" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="25" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="35" Label="Source1" />
      <Edge From="29" To="32" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="45" Label="Source1" />
      <Edge From="39" To="42" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="47" To="54" Label="Source1" />
      <Edge From="48" To="51" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source2" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source2" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="64" Label="Source1" />
      <Edge From="58" To="61" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source2" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source2" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="66" To="73" Label="Source1" />
      <Edge From="67" To="70" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="69" To="70" Label="Source2" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source2" />
      <Edge From="73" To="74" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>