<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.ONIX;assembly=Bonsai.ONIX"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="videoBaseName" Description="Base name for video files acquired with miniscope" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>miniscope_.avi</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Gain" DisplayName="Gain" Description="Gain" />
        <Property Name="LEDBrightness" />
        <Property Name="LiquidLensVoltage" />
        <Property Name="FrameRate" />
        <Property Name="InterleaveLED" />
        <Property Name="DeviceAddress" />
        <Property Name="EnableStream" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:MiniscopeV4Device">
          <p1:DeviceAddress>
            <p1:HardwareSlot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:HardwareSlot>
            <p1:Address>8</p1:Address>
          </p1:DeviceAddress>
          <p1:EnableStream>true</p1:EnableStream>
          <p1:LEDBrightness>11.764705882352942</p1:LEDBrightness>
          <p1:FrameRate>FPS30Hz</p1:FrameRate>
          <p1:Gain>High</p1:Gain>
          <p1:LiquidLensVoltage>37.928</p1:LiquidLensVoltage>
          <p1:InterleaveLED>false</p1:InterleaveLED>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>./data_2024-02-29_09-51-07/miniscope_.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="timestampsBaseName" Description="Base name for file recording miniscope timestamps" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>miniscopeTS_.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>./data_2024-02-29_09-51-07/miniscope_timestamps_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp,Value</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="19" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>