<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.4+2bab12753e452fa02540eb20e93664d41b112590"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:OpenEphys.Bonsai.Miniscope;assembly=OpenEphys.Bonsai.Miniscope"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="videoBaseName" Description="Base name for video files acquired with miniscope" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>miniscope_.avi</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LedBrightness" />
        <Property Name="Focus" />
        <Property Name="SensorGain" />
        <Property Name="FramesPerSecond" />
        <Property Name="LedRespectsTrigger" />
        <Property Name="Index" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UclaMiniscopeV4">
          <p1:Index>0</p1:Index>
          <p1:LedBrightness>54.651162790697676</p1:LedBrightness>
          <p1:Focus>-51.162790697674417</p1:Focus>
          <p1:SensorGain>High</p1:SensorGain>
          <p1:FramesPerSecond>Fps30</p1:FramesPerSecond>
          <p1:LedRespectsTrigger>false</p1:LedRespectsTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\manip\Documents\data\Bonsai_data\miniscope_.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="timestampsBaseName" Description="Base name for file recording miniscope timestamps" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>miniscopeTS_.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>./data_2024-02-29_09-51-07/miniscope_timestamps_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp,Value</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="11" To="18" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>