WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(DeviceAddress, BlockSize, EnableStream, RequireSNMatch)
-> Bonsai.ONIX.NeuropixelsV1eDevice
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=9)
  BlockSize=30
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=9)
    HeadstageType=ONIXE
    ConfigProbeSN=nil
    PerformReadCheck=false
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
          NeuropixelsV1GainCorrection
            APx50Correction=1
            APx125Correction=1
            APx250Correction=1
            APx500Correction=1
            APx1000Correction=1
            APx1500Correction=1
            APx2000Correction=1
            APx3000Correction=1
            LFPx50Correction=1
            LFPx125Correction=1
            LFPx250Correction=1
            LFPx500Correction=1
            LFPx1000Correction=1
            LFPx1500Correction=1
            LFPx2000Correction=1
            LFPx3000Correction=1
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    ADCs
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=16, CompN=16, Slope=0, Coarse=0, Fine=0, Cfix=0, Offset=0, Threshold=0)
  RequireSNMatch=false
-> PublishSubject NPdevice

SubscribeSubject NPdevice
-> MemberSelector(Selector=FrameCounter) => #4
SubscribeSubject pathName => #5
ExternalizedMapping(Value(DisplayName=frameCounterBaseName))
-> StringProperty(Value=NP_FrameCounter_.raw) => #7
#5, #7 -> CombineLatest
-> Format(Format={0}/{1}, Selector="Item1,Item2")
-> PropertyMapping(Path) => #10
#4, #10 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

SubscribeSubject NPdevice
-> MemberSelector(Selector=LFPClock) => #13
SubscribeSubject pathName => #14
ExternalizedMapping(Value(DisplayName=LFPClockBaseName))
-> StringProperty(Value=NP_LFPtimestamps_.raw) => #16
#14, #16 -> CombineLatest
-> Format(Format={0}/{1}, Selector="Item1,Item2")
-> PropertyMapping(Path) => #19
#13, #19 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

SubscribeSubject NPdevice
-> MemberSelector(Selector=LFPData) => #22
SubscribeSubject pathName => #23
ExternalizedMapping(Value(DisplayName=LFPDataBaseName))
-> StringProperty(Value=NP_LFPdata_.raw) => #25
#23, #25 -> CombineLatest
-> Format(Format={0}/{1}, Selector="Item1,Item2")
-> PropertyMapping(Path) => #28
#22, #28 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

SubscribeSubject NPdevice
-> MemberSelector(Selector=Clock) => #31
SubscribeSubject pathName => #32
ExternalizedMapping(Value(DisplayName=clockBaseName))
-> StringProperty(Value=NP_timestamps_.raw) => #34
#32, #34 -> CombineLatest
-> Format(Format={0}/{1}, Selector="Item1,Item2")
-> PropertyMapping(Path) => #37
#31, #37 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

ExternalizedMapping(port(DisplayName=NPXPortOE)) => #39
ExternalizedMapping(Channels(DisplayName=NPXChannelsOE)) => #40
SubscribeSubject NPdevice
-> MemberSelector(Selector=SpikeData) => #42
#40, #42 -> Bonsai.Dsp.SelectChannels(Channels(int=1, int=2, int=3, int=5, int=6, int=7, int=9, int=10, int=11, int=13, int=14, int=15)) => #43
#39, #43 -> Bonsai.JonsUtils.OpenCVMatUDPClient(addr=localhost, port=9002)
#42 -> WorkflowOutput
SubscribeSubject pathName => #46
ExternalizedMapping(Value(DisplayName=spikeDataBaseName))
-> StringProperty(Value=NP_spikes_.raw) => #48
#46, #48 -> CombineLatest
-> Format(Format={0}/{1}, Selector="Item1,Item2")
-> PropertyMapping(Path) => #51
#42, #51 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
