WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(DeviceAddress, EnableStream, RequireSNMatch, BlockSize)
-> Bonsai.ONIX.NeuropixelsV1Device
  DeviceAddress(HardwareSlot(Driver="", Index=0), Address=nil)
  EnableStream=false
  Configuration
    DeviceAddress(HardwareSlot(Driver="", Index=0), Address=nil)
    HeadstageType=ONIXFPGA
    ConfigProbeSN=22175718312
    PerformReadCheck=false
    CalibrationFolderPath=C:\Users\Manip1\Documents\NPX\SO3183\22175718312
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
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    ADCs
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=5, Coarse=1, Fine=0, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=4, Coarse=1, Fine=3, Cfix=8, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=6, Coarse=2, Fine=2, Cfix=1, Offset=4, Threshold=510)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=2, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=3, Coarse=2, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=1, Fine=1, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=6, Coarse=2, Fine=1, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=3, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=6, Coarse=1, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=3, Threshold=511)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=5, Coarse=2, Fine=1, Cfix=8, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=27, CompN=3, Slope=5, Coarse=1, Fine=1, Cfix=0, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=25, CompN=5, Slope=4, Coarse=3, Fine=1, Cfix=8, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=6, Coarse=2, Fine=2, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=6, Coarse=2, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=3, Fine=0, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=26, CompN=4, Slope=7, Coarse=0, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=3, Coarse=3, Fine=0, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=6, Coarse=1, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=5, Coarse=1, Fine=2, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=4, Coarse=3, Fine=2, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=4, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=6, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=511)
      NeuropixelsV1ADC(CompP=29, CompN=1, Slope=5, Coarse=1, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=26, CompN=4, Slope=7, Coarse=0, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
  RequireSNMatch=true
  BlockSize=1
-> PublishSubject NPdevice

Disable ExternalizedMapping(DeviceAddress, BlockSize, EnableStream, RequireSNMatch)
-> Disable Bonsai.ONIX.NeuropixelsV1eDevice
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=9)
  BlockSize=30
  EnableStream=true
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=9)
    HeadstageType=ONIXE
    ConfigProbeSN=22175718312
    PerformReadCheck=false
    CalibrationFolderPath=C:\Users\Manip1\Documents\NPX\SO3183\22175718312
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=INTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=INTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=INTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=INTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
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    ADCs
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=5, Coarse=1, Fine=0, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=4, Coarse=1, Fine=3, Cfix=8, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=6, Coarse=2, Fine=2, Cfix=1, Offset=4, Threshold=510)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=2, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=3, Coarse=2, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=1, Fine=1, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=6, Coarse=2, Fine=1, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=3, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=6, Coarse=1, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=3, Threshold=511)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=5, Coarse=2, Fine=1, Cfix=8, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=27, CompN=3, Slope=5, Coarse=1, Fine=1, Cfix=0, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=25, CompN=5, Slope=4, Coarse=3, Fine=1, Cfix=8, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=6, Coarse=2, Fine=2, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=6, Coarse=2, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=3, Fine=0, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=26, CompN=4, Slope=7, Coarse=0, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=3, Coarse=3, Fine=0, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=6, Coarse=1, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=5, Coarse=1, Fine=2, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=4, Coarse=3, Fine=2, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=4, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=6, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=511)
      NeuropixelsV1ADC(CompP=29, CompN=1, Slope=5, Coarse=1, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=26, CompN=4, Slope=7, Coarse=0, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
  RequireSNMatch=true

SubscribeSubject NPdevice
-> MemberSelector(Selector=FrameCounter) => #6
SubscribeSubject pathName => #7
ExternalizedMapping(Value(DisplayName=frameCounterBaseName))
-> StringProperty(Value=NP_FrameCounter_.raw) => #9
#7, #9 -> CombineLatest
-> Format(Format={0}/{1}, Selector="Item1,Item2")
-> PropertyMapping(Path) => #12
#6, #12 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

SubscribeSubject NPdevice
-> MemberSelector(Selector=LFPClock) => #15
SubscribeSubject pathName => #16
ExternalizedMapping(Value(DisplayName=LFPClockBaseName))
-> StringProperty(Value=NP_LFPtimestamps_.raw) => #18
#16, #18 -> CombineLatest
-> Format(Format={0}/{1}, Selector="Item1,Item2")
-> PropertyMapping(Path) => #21
#15, #21 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

SubscribeSubject NPdevice
-> MemberSelector(Selector=LFPData) => #24
SubscribeSubject pathName => #25
ExternalizedMapping(Value(DisplayName=LFPDataBaseName))
-> StringProperty(Value=NP_LFPdata_.raw) => #27
#25, #27 -> CombineLatest
-> Format(Format={0}/{1}, Selector="Item1,Item2")
-> PropertyMapping(Path) => #30
#24, #30 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

SubscribeSubject NPdevice
-> MemberSelector(Selector=SpikeData) => #33
-> WorkflowOutput
SubscribeSubject pathName => #35
ExternalizedMapping(Value(DisplayName=spikeDataBaseName))
-> StringProperty(Value=NP_spikes_.raw) => #37
#35, #37 -> CombineLatest
-> Format(Format={0}/{1}, Selector="Item1,Item2")
-> PropertyMapping(Path) => #40
#40, #33 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor) => #41
ExternalizedMapping(Channels(DisplayName=NPXChannelsOE)) => #42
#41, #42 -> Bonsai.Dsp.SelectChannels(Channels(int=1, int=2, int=3, int=5, int=6, int=7, int=9, int=10, int=11, int=13, int=14, int=15)) => #43
ExternalizedMapping(port(DisplayName=NPXPortOE)) => #44
#43, #44 -> Bonsai.JonsUtils.OpenCVMatUDPClient(addr=localhost, port=9002)

SubscribeSubject NPdevice
-> MemberSelector(Selector=Clock) => #47
SubscribeSubject pathName => #48
ExternalizedMapping(Value(DisplayName=clockBaseName))
-> StringProperty(Value=NP_timestamps_.raw) => #50
#48, #50 -> CombineLatest
-> Format(Format={0}/{1}, Selector="Item1,Item2")
-> PropertyMapping(Path) => #53
#47, #53 -> Bonsai.Dsp.MatrixWriter(Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
