<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="animalID" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>animalID</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>animalID</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="timestampsBaseName" Description="Base name for file saving webcam timestamps" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OE_timestamps_.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>animalID</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>expeName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_{1:D2}_{2:D2}</Format>
        <Selector>Year,Month,Day</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trialName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{2}/{3}/{4}/{5}/{2}_{1}</Format>
        <Selector>Item1,Item2,Item3,Item4,Item5,Item6</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>./data_2024-02-29_09-55-06/webcam_timestamps_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="OEdataBasename" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OE_32ch_data_.bin</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>animalID</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>expeName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_{1:D2}_{2:D2}</Format>
        <Selector>Year,Month,Day</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trialName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{2}/{3}/{4}/{5}/{2}_{1}</Format>
        <Selector>Item1,Item2,Item3,Item4,Item5,Item6</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path />
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>timestampsFromBoard</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OE_timestampsBoard_.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>animalID</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>expeName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_{1:D2}_{2:D2}</Format>
        <Selector>Year,Month,Day</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trialName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{2}/{3}/{4}/{5}/{2}_{1}</Format>
        <Selector>Item1,Item2,Item3,Item4,Item5,Item6</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TTLin</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OE_ttlin_.bin</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>animalID</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>expeName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_{1:D2}_{2:D2}</Format>
        <Selector>Year,Month,Day</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>trialName</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{2}/{3}/{4}/{5}/{2}_{1}</Format>
        <Selector>Item1,Item2,Item3,Item4,Item5,Item6</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="13" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="13" Label="Source2" />
      <Edge From="6" To="13" Label="Source3" />
      <Edge From="7" To="13" Label="Source4" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source5" />
      <Edge From="12" To="13" Label="Source6" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="19" To="33" Label="Source1" />
      <Edge From="20" To="30" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="30" Label="Source2" />
      <Edge From="23" To="30" Label="Source3" />
      <Edge From="24" To="30" Label="Source4" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="30" Label="Source5" />
      <Edge From="29" To="30" Label="Source6" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="48" Label="Source1" />
      <Edge From="36" To="45" Label="Source1" />
      <Edge From="37" To="45" Label="Source2" />
      <Edge From="38" To="45" Label="Source3" />
      <Edge From="39" To="45" Label="Source4" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="45" Label="Source5" />
      <Edge From="44" To="45" Label="Source6" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source2" />
      <Edge From="49" To="62" Label="Source1" />
      <Edge From="50" To="59" Label="Source1" />
      <Edge From="51" To="59" Label="Source2" />
      <Edge From="52" To="59" Label="Source3" />
      <Edge From="53" To="59" Label="Source4" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="59" Label="Source5" />
      <Edge From="58" To="59" Label="Source6" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>