WorkflowBuilder(Version=2.8.1)
Bonsai.ONIX.ONIContext(ContextConfiguration(Slot(Driver=riffa, Index=0), ReadSize=2048, WriteSize=2048))

Bonsai.ONIX.NeuropixelsV1eDevice
  DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=8)
  BlockSize=30
  EnableStream=false
  Configuration
    DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=8)
    HeadstageType=ONIXE
    ConfigProbeSN=22175718312
    PerformReadCheck=false
    CalibrationFolderPath=C:\Users\Manip1\Documents\NPX\SO3183\22175718312
    Mode=RECORD
    Channels
      NeuropixelsV1Channel
        Index=0
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
      NeuropixelsV1Channel
        Index=1
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
      NeuropixelsV1Channel
        Index=2
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
      NeuropixelsV1Channel
        Index=3
        Bank=ZERO
        APGain=x1000
        LFPGain=x50
        Standby=false
        APFilter=false
        Reference=EXTERNAL
        GainCorrectrions
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
          NeuropixelsV1GainCorrection
            APx50Correction=1.08425
            APx125Correction=1.08425
            APx250Correction=1.089937
            APx500Correction=1.060648
            APx1000Correction=1.074243
            APx1500Correction=1.074243
            APx2000Correction=1.074243
            APx3000Correction=1.074243
            LFPx50Correction=0.994314
            LFPx125Correction=0.994314
            LFPx250Correction=0.999121
            LFPx500Correction=0.971227
            LFPx1000Correction=0.985311
            LFPx1500Correction=0.985311
            LFPx2000Correction=0.985311
            LFPx3000Correction=0.985311
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    ADCs
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=5, Coarse=1, Fine=0, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=11, CompN=19, Slope=4, Coarse=1, Fine=3, Cfix=8, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=6, Coarse=2, Fine=2, Cfix=1, Offset=4, Threshold=510)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=4, Coarse=2, Fine=3, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=0, Threshold=0)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=3, Coarse=1, Fine=3, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=6, Coarse=2, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=3, Coarse=2, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=6, Coarse=1, Fine=1, Cfix=1, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=6, Coarse=2, Fine=1, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=3, Coarse=2, Fine=3, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=6, Coarse=1, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=18, CompN=12, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=3, Threshold=511)
      NeuropixelsV1ADC(CompP=14, CompN=16, Slope=5, Coarse=2, Fine=1, Cfix=8, Offset=4, Threshold=514)
      NeuropixelsV1ADC(CompP=27, CompN=3, Slope=5, Coarse=1, Fine=1, Cfix=0, Offset=1, Threshold=514)
      NeuropixelsV1ADC(CompP=25, CompN=5, Slope=4, Coarse=3, Fine=1, Cfix=8, Offset=1, Threshold=513)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=6, Coarse=2, Fine=2, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=6, Coarse=2, Fine=1, Cfix=8, Offset=2, Threshold=513)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=4, Coarse=3, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=13, CompN=17, Slope=3, Coarse=3, Fine=0, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=26, CompN=4, Slope=7, Coarse=0, Fine=0, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=19, CompN=11, Slope=3, Coarse=3, Fine=0, Cfix=0, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=6, Coarse=1, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=20, CompN=10, Slope=5, Coarse=1, Fine=2, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=23, CompN=7, Slope=4, Coarse=3, Fine=2, Cfix=8, Offset=3, Threshold=514)
      NeuropixelsV1ADC(CompP=22, CompN=8, Slope=4, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=24, CompN=6, Slope=6, Coarse=1, Fine=2, Cfix=8, Offset=1, Threshold=511)
      NeuropixelsV1ADC(CompP=29, CompN=1, Slope=5, Coarse=1, Fine=2, Cfix=8, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=26, CompN=4, Slope=7, Coarse=0, Fine=0, Cfix=0, Offset=2, Threshold=514)
      NeuropixelsV1ADC(CompP=21, CompN=9, Slope=4, Coarse=3, Fine=1, Cfix=8, Offset=2, Threshold=514)
  RequireSNMatch=true
-> MemberSelector(Selector=SpikeData)

Bonsai.ONIX.HeadstagePortControlDevice(DeviceAddress(HardwareSlot(Driver=riffa, Index=0), Address=2), EnableStream=false, LinkVoltage=4.9, GPO1=false) => #3
-> Bonsai.IO.CsvWriter(FileName=port-state_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
#3 -> MemberSelector(Selector=Message)
