<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:CreateContext">
          <onix1:Driver>riffa</onix1:Driver>
          <onix1:Index>0</onix1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureBreakoutBoard">
          <onix1:Name>BreakoutBoard</onix1:Name>
          <onix1:Heartbeat>
            <onix1:DeviceName>BreakoutBoard/PersistentHeartbeat</onix1:DeviceName>
            <onix1:DeviceAddress>0</onix1:DeviceAddress>
            <onix1:BeatsPerSecond>100</onix1:BeatsPerSecond>
          </onix1:Heartbeat>
          <onix1:AnalogIO>
            <onix1:DeviceName>BreakoutBoard/AnalogIO</onix1:DeviceName>
            <onix1:DeviceAddress>6</onix1:DeviceAddress>
            <onix1:Enable>false</onix1:Enable>
            <onix1:InputRange0>TenVolts</onix1:InputRange0>
            <onix1:InputRange1>TenVolts</onix1:InputRange1>
            <onix1:InputRange2>TenVolts</onix1:InputRange2>
            <onix1:InputRange3>TenVolts</onix1:InputRange3>
            <onix1:InputRange4>TenVolts</onix1:InputRange4>
            <onix1:InputRange5>TenVolts</onix1:InputRange5>
            <onix1:InputRange6>TenVolts</onix1:InputRange6>
            <onix1:InputRange7>TenVolts</onix1:InputRange7>
            <onix1:InputRange8>TenVolts</onix1:InputRange8>
            <onix1:InputRange9>TenVolts</onix1:InputRange9>
            <onix1:InputRange10>TenVolts</onix1:InputRange10>
            <onix1:InputRange11>TenVolts</onix1:InputRange11>
            <onix1:Direction0>Input</onix1:Direction0>
            <onix1:Direction1>Input</onix1:Direction1>
            <onix1:Direction2>Input</onix1:Direction2>
            <onix1:Direction3>Input</onix1:Direction3>
            <onix1:Direction4>Input</onix1:Direction4>
            <onix1:Direction5>Input</onix1:Direction5>
            <onix1:Direction6>Input</onix1:Direction6>
            <onix1:Direction7>Input</onix1:Direction7>
            <onix1:Direction8>Input</onix1:Direction8>
            <onix1:Direction9>Input</onix1:Direction9>
            <onix1:Direction10>Input</onix1:Direction10>
            <onix1:Direction11>Input</onix1:Direction11>
          </onix1:AnalogIO>
          <onix1:DigitalIO>
            <onix1:DeviceName>BreakoutBoard/DigitalIO</onix1:DeviceName>
            <onix1:DeviceAddress>7</onix1:DeviceAddress>
            <onix1:Enable>false</onix1:Enable>
            <onix1:DeadTime>0</onix1:DeadTime>
            <onix1:SampleRate xsi:nil="true" />
          </onix1:DigitalIO>
          <onix1:ClockOutput>
            <onix1:DeviceName>BreakoutBoard/OutputClock</onix1:DeviceName>
            <onix1:DeviceAddress>5</onix1:DeviceAddress>
            <onix1:ClockGate>false</onix1:ClockGate>
            <onix1:Frequency>1000000</onix1:Frequency>
            <onix1:DutyCycle>50</onix1:DutyCycle>
            <onix1:Delay>0</onix1:Delay>
          </onix1:ClockOutput>
          <onix1:HarpInput>
            <onix1:DeviceName>BreakoutBoard/HarpSyncInput</onix1:DeviceName>
            <onix1:DeviceAddress>12</onix1:DeviceAddress>
            <onix1:Enable>false</onix1:Enable>
            <onix1:Source>Breakout</onix1:Source>
          </onix1:HarpInput>
          <onix1:MemoryMonitor>
            <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
            <onix1:DeviceAddress>10</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:SamplesPerSecond>10</onix1:SamplesPerSecond>
          </onix1:MemoryMonitor>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureHeadstageNeuropixelsV1e">
          <onix1:Name>HeadstageNeuropixelsV1e</onix1:Name>
          <onix1:NeuropixelsV1>
            <onix1:DeviceName>HeadstageNeuropixelsV1e/NeuropixelsV1</onix1:DeviceName>
            <onix1:DeviceAddress>256</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:ProbeConfiguration>
              <onix1:SpikeAmplifierGain>Gain1000</onix1:SpikeAmplifierGain>
              <onix1:LfpAmplifierGain>Gain50</onix1:LfpAmplifierGain>
              <onix1:Reference>External</onix1:Reference>
              <onix1:SpikeFilter>true</onix1:SpikeFilter>
              <onix1:GainCalibrationFileName>C:\Users\Manip1\Documents\NPX\SO5170\23328315552_m12111_m12127\23328315552_gainCalValues.csv</onix1:GainCalibrationFileName>
              <onix1:AdcCalibrationFileName>C:\Users\Manip1\Documents\NPX\SO5170\23328315552_m12111_m12127\23328315552_ADCCalibration.csv</onix1:AdcCalibrationFileName>
              <onix1:InvertPolarity>false</onix1:InvertPolarity>
            </onix1:ProbeConfiguration>
          </onix1:NeuropixelsV1>
          <onix1:Bno055>
            <onix1:DeviceName>HeadstageNeuropixelsV1e/PolledBno055</onix1:DeviceName>
            <onix1:DeviceAddress>257</onix1:DeviceAddress>
            <onix1:Enable>false</onix1:Enable>
            <onix1:AxisMap>YZX</onix1:AxisMap>
            <onix1:AxisSign>MirrorZ MirrorX</onix1:AxisSign>
          </onix1:Bno055>
          <onix1:Port>PortA</onix1:Port>
          <onix1:PortVoltage>
            <onix1:Requested xsi:nil="true" />
          </onix1:PortVoltage>
          <onix1:TrackingLed>true</onix1:TrackingLed>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:StartAcquisition">
          <onix1:ReadSize>2048</onix1:ReadSize>
          <onix1:WriteSize>2048</onix1:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>acqStarted</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>acqStarted</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:NeuropixelsV1eData">
          <onix1:DeviceName>HeadstageNeuropixelsV1e/NeuropixelsV1</onix1:DeviceName>
          <onix1:BufferSize>36</onix1:BufferSize>
          <onix1:OrderByDepth>false</onix1:OrderByDepth>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SpikeData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>OrderByDepthTest_spikes_FALSE_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>LfpData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>OrderByDepthTest_lfp_FALSE_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>OrderByDepthTest_timestamps_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>acqStarted</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:NeuropixelsV1eData">
          <onix1:DeviceName>HeadstageNeuropixelsV1e/NeuropixelsV1</onix1:DeviceName>
          <onix1:BufferSize>36</onix1:BufferSize>
          <onix1:OrderByDepth>true</onix1:OrderByDepth>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SpikeData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>OrderByDepthTest_spikes_TRUE_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>LfpData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>OrderByDepthTest_lfp_TRUE_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="5" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="7" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="14" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
