<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.4+2bab12753e452fa02540eb20e93664d41b112590"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:pylon="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\generateTimestampedFolder.bonsai">
        <folderBaseName>../../../Documents/data/Expe</folderBaseName>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:FileName>sineHigh.wav</al:FileName>
                <al:BufferLength>10</al:BufferLength>
                <al:SampleRate>0</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>highSound</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:FileName>sineLow.wav</al:FileName>
                <al:BufferLength>10</al:BufferLength>
                <al:SampleRate>0</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>lowSound</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>G</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
                <Value>G</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>triggerLeft</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>highSound</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioPlayback">
                <al:SampleRate>44000</al:SampleRate>
                <al:State>Playing</al:State>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Left</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>D</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>lowSound</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioPlayback">
                <al:SampleRate>44000</al:SampleRate>
                <al:State>Playing</al:State>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Right</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>cond</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
                <Value>D</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>triggerRight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>triggerLeft</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>triggerRight</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>triggerRec</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>triggerStop</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="trialDuration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT40S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>trialDuration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="nTrials" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>60</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>nTrials</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>pathName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>video_timestamps_.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>cond</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SerialNumber" />
              <Property Name="ParameterFile" />
              <Property Name="GrabStrategy" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="pylon:PylonCapture">
                <pylon:SerialNumber>21582249</pylon:SerialNumber>
                <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>../../../Documents/data/Expe_2024-07-20_17-03-53/video_timestamps_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
              <triggerStop>triggerStop</triggerStop>
              <delayStop>PT0S</delayStop>
              <triggerStart>triggerRec</triggerStart>
              <delayStart>PT1S</delayStart>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>pathName</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="videoBaseName" Description="Base name for file recording webcam images" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>video_.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>cond</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>../../../Documents/data/Expe_2024-07-20_17-03-53/video_.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
              <triggerStop>triggerStop</triggerStop>
              <delayStop>PT0S</delayStop>
              <triggerStart>triggerRec</triggerStart>
              <delayStart>PT1S</delayStart>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="14" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="16" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="35" Label="Source1" />
            <Edge From="33" To="35" Label="Source2" />
            <Edge From="34" To="35" Label="Source3" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="42" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="40" To="44" Label="Source1" />
            <Edge From="41" To="42" Label="Source2" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="45" To="54" Label="Source2" />
            <Edge From="47" To="51" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="51" Label="Source2" />
            <Edge From="50" To="51" Label="Source3" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TimeSpanProperty">
          <Value>PT40S</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <triggerStop>triggerStop</triggerStop>
        <delayStop>PT0S</delayStop>
        <triggerStart>triggerRec</triggerStart>
        <delayStart>PT1S</delayStart>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>